PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent flecha
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent respuesta_ensayo_go
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine ITI_routine
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    CodeComponent code_ITI
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine del code_iti
        import random

        def generate_iti(prev_itis):
            max_attempts = 100
            for _ in range(max_attempts):
                iti = random.randint(1000, 2500)
                if len(prev_itis) < 2:
                    return iti
                diff1 = abs(iti - prev_itis[-1])
                diff2 = abs(iti - prev_itis[-2])
                if not (diff1 < 100 and diff2 < 100):
                    return iti
            return random.choice([1000, 1500, 2000, 2500])

        if 'prev_itis' not in globals():
            prev_itis = []

        iti = generate_iti(prev_itis)
        prev_itis.append(iti)
        if len(prev_itis) > 2:
            prev_itis = prev_itis[-2:]

        iti_secs = iti / 1000.0
    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_secs
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  Routine cruz
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    PolygonComponent cruz_fijacion
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent control_volumen
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type != 'stop':
            SSD = 0
            volume = 0
        else:
             SSD = SSD_dynamic
             volume = 1
             stop_signal.setVolume(1)
             stop_signal.status = NOT_STARTED  # reactiva el sonido
  Routine bloque_A
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    PolygonComponent flecha_A
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent respuesta_A
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    SoundComponent stop_signal
      sound [set every repeat] = 900
      startVal [time (s)] = SSD
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = volume
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        ensayoClock = core.Clock()
        trial_type_actual = trial_type
      Each Frame:
        # Obtenemos tiempo actual del ensayo
        t = ensayoClock.getTime()

        # --- GO ---
        if trial_type == 'go':
            if respuesta_A.keys and len(respuesta_A.keys) > 0:
                continueRoutine = False
            elif t >= 1.5:
                continueRoutine = False  # omisión

        # --- STOP ---
        elif trial_type == 'stop':
            if respuesta_A.keys and len(respuesta_A.keys) > 0:
                flecha_A.setAutoDraw(False)  # desaparece la flecha
            if t >= 1.5:
                continueRoutine = False  # se termine sí o sí a los 1.5 s
      End Routine:
        if trial_type_actual == 'stop':
            if respuesta_A.keys:
                SSD_dynamic = max(0.05, SSD_dynamic - 0.05)
            else:
                SSD_dynamic = min(0.9, SSD_dynamic + 0.05)

        thisExp.addData('SSD', SSD)
        # Default
        validez = 'sin clasificar'
        validez_binaria = 0

        if trial_type == 'go':
            if respuesta_A.keys:
                if respuesta_A.rt < 0.1:
                    validez = 'anticipada'
                    validez_binaria = 0
                elif respuesta_A.corr:
                    validez = 'correcta'
                    validez_binaria = 1
                else:
                    validez = 'incorrecta'
                    validez_binaria = 0
            else:
                validez = 'omitida'
                validez_binaria = 0

        elif trial_type == 'stop':
            if respuesta_A.keys:
                validez = 'incorrecta'
                validez_binaria = 0
            else:
                validez = 'correcta'
                validez_binaria = 1
        A.addData('validez', validez)
        A.addData('validez_binaria', validez_binaria)
    CodeComponent contado_fb
      Code Type = Auto->JS
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      End Routine:
        # -----------------------------------------------
        # Acumuladores para feedback entre bloques
        # Inicialización previa en "Begin Experiment"
        if 'n_trials_A' not in vars():
            n_trials_A = 0
            n_omisiones_A = 0
            n_errores_A = 0
            rt_list_A = []

        n_trials_A += 1

        if trial_type == 'go':
            if not respuesta_A.keys:
                n_omisiones_A += 1
            elif not respuesta_A.corr:
                n_errores_A += 1
            elif respuesta_A.rt is not None and respuesta_A.rt >= 0.1:
                rt_list_A.append(respuesta_A.rt)
        # -----------------------------------------------
  Routine instrucciones
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = espacio para comenzar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent definicion_ssd
      Code Type = Auto->JS
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      Begin Experiment:
        SSD_dynamic = 0.25
        # valor que se irá ajustando según el staircase
  Routine stats
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    CodeComponent feedback_code
      Code Type = Both
      Begin JS Routine:
        // ⚠️ CAMBIÁ 'A' por el nombre real de tu loop
        var valideces = A.data['validez'];

        var total = valideces.length;
        var omitidas = 0;
        var errores = 0;

        for (var i = 0; i < total; i++) {
            if (valideces[i] === 'omitida') {
                omitidas += 1;
            } else if (valideces[i] === 'error') {
                errores += 1;
            }
        }

        var mensaje = "Resumen del bloque anterior:\n\n";

        if (omitidas / total > 0.10) {
            mensaje += "⚠️ Muchas omisiones. Respondé sin esperar.\n";
        }
        if (errores / total > 0.25) {
            mensaje += "⚠️ Muchos errores. Prestá atención.\n";
        }
        if (mensaje === "Resumen del bloque anterior:\n\n") {
            mensaje += "✅ Todo bien. Buen trabajo.\n";
        }

        mensaje += "\nPresiona espacio para continuar.";

        // ⚠️ CAMBIÁ 'feedback_text' si tu componente de texto tiene otro nombre
        feedback_text.text = mensaje;
      Begin Routine:
        # ⚠️ CAMBIÁ el nombre 'A' por el nombre real de tu loop (por ejemplo: 'bloqueA', 'trials', etc.)
        valideces = A.data['validez']

        total = len(valideces)
        omitidas = sum(1 for v in valideces if v == 'omitida')
        errores = sum(1 for v in valideces if v == 'error')

        mensaje = "Resumen del bloque anterior:\n\n"

        if omitidas / total > 0.10:
            mensaje += "⚠️ Muchas omisiones. Respondé sin esperar.\n"
        if errores / total > 0.25:
            mensaje += "⚠️ Muchos errores. Prestá atención.\n"
        if mensaje.strip() == "Resumen del bloque anterior:":
            mensaje += "✅ Todo bien. Buen trabajo.\n"

        mensaje += "\nPresiona espacio para continuar."

        # ⚠️ CAMBIÁ 'feedback_text' si tu componente de texto se llama distinto
        feedback_text.text = mensaje
  Routine practica_go
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    PolygonComponent flecha_go
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent respuesta_go
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine feedback_go
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    TextComponent feedack_solo_go
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_go_text
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    KeyboardComponent fin_go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cargar_datos
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    CodeComponent texto_feedback_go
      Code Type = Auto->JS
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      Begin Routine:
        # Mensaje introductorio fijo
        intro_text = "Ahora pasaremos a una práctica con ensayos 'go' y algunos con señales 'stop'. " + \
                     "Cuando escuches el tono, intentá no responder. Pero no esperes: respondé lo más rápido y preciso posible.\n\n"

        # Seguridad: evitar errores si listas están vacías
        if len(rt_go_list) > 0:
            rt_suma = 0
            n_validos = 0
            for rt in rt_go_list:
                if rt is not None and rt >= 100 and rt <= 1500:
                    rt_suma += rt
                    n_validos += 1
            if n_validos > 0:
                rt_medio = rt_suma / n_validos
            else:
                rt_medio = 0
        else:
            rt_medio = 0

        # Calculamos proporciones
        if total_trials_go_only > 0:
            omisiones_prop = omisiones_go / total_trials_go_only
            errores_prop = errores_go / total_trials_go_only
        else:
            omisiones_prop = 0
            errores_prop = 0

        # Construcción del mensaje
        mensajes = []

        if rt_medio > 600:
            mensajes.append("Tu tiempo medio de respuesta fue de " + str(int(rt_medio)) + " ms. Intentá responder un poco más rápido.")
        else:
            mensajes.append("Buen ritmo de respuesta: " + str(int(rt_medio)) + " ms.")

        if omisiones_prop > 0.1:
            mensajes.append("Omitiste " + str(round(omisiones_prop * 100)) + "% de las respuestas. Intentá no dejar pasar flechas sin contestar.")

        if errores_prop > 0.1:
            mensajes.append("Cometiste " + str(round(errores_prop * 100)) + "% de errores. Prestá atención a la dirección de las flechas.")

        if len(mensajes) == 0:
            mensajes.append("¡Muy bien! Estás listo para continuar.")

        # Texto final que se mostrará
        feedback_go_text = intro_text + "\n".join(mensajes)
  Routine datos_stats
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    CodeComponent feedback_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Obtener datos del bloque anterior
        datos = A.data  # Asegurate que sea el nombre exacto del loop

        tipos = datos['trial_type']
        rts = datos['respuesta_A.rt']
        corrs = datos['respuesta_A.corr']
        keys = datos['respuesta_A.keys']

        # Inicializar contadores
        go_trials = 0
        go_omitidas = 0
        go_errores = 0
        go_rts = []

        for i in range(len(tipos)):
            if tipos[i] == 'go':
                go_trials += 1
                rt = rts[i]
                corr = corrs[i]
                key = keys[i]

                if key in [None, '', 'None', 'none']:
                    go_omitidas += 1
                else:
                    try:
                        rt = float(rt)
                        if rt >= 0.1:
                            go_rts.append(rt)
                            if corr in [0, '0']:
                                go_errores += 1
                    except:
                        continue

        omitidas_pct = go_omitidas / go_trials if go_trials > 0 else 0
        errores_pct = go_errores / go_trials if go_trials > 0 else 0
        rt_prom = sum(go_rts) / len(go_rts) if len(go_rts) > 0 else 0

        mensaje = "Resumen del bloque anterior:\n\n"
        problemas = 0

        if rt_prom > 0.6:
            mensaje += "⚠️ Respondiste muy lento. Intenta responder más rápido.\n"
            problemas += 1
        if omitidas_pct > 0.10:
            mensaje += "⚠️ Omitiste muchas respuestas. ¡No esperes, responde a todas las flechas!\n"
            problemas += 1
        if errores_pct > 0.25:
            mensaje += "⚠️ Cometiste varios errores. Presta más atención.\n"
            problemas += 1

        if problemas == 0:
            mensaje += "✅ Buen trabajo. Continúa así.\n"

        mensaje += "\nPresiona una tecla para continuar."
  Routine feedback
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    CodeComponent feedback_text
      Code Type = Auto->JS
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      Begin Routine:
        # Cálculo de métricas para feedback
        from numpy import mean

        omiss_pct = (n_omisiones_A / n_trials_A) * 100
        error_pct = (n_errores_A / n_trials_A) * 100
        mean_rt_ms = mean(rt_list_A)*1000 if rt_list_A else 0

        mensajes = ["Ahora veiene el segundo bloque de la misma tarea"]

        if omiss_pct > 10:
            mensajes.append(f"Omitiste un {omiss_pct:.1f}%.  Responde a todas las flechas.")
        if error_pct > 25:
            mensajes.append(f"Tienes un {error_pct:.1f}% de errores. Presta más atención")
        if mean_rt_ms > 600:
            mensajes.append(f"Responde lo más rápido que puedas")

        if mensajes:
            fbMsg = "\n".join(mensajes)
        else:
            fbMsg = "Buen trabajo. Puedes continuar."
    TextComponent feedback_text_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $fbMsg
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  Routine pantalla_paso
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  Routine Bloque_practica
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    PolygonComponent Flecha
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent respuesta
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    SoundComponent stop_signal_practica
      sound [set every repeat] = 900
      startVal [time (s)] = SSD
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = volume
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    CodeComponent code_practica
      Code Type = Auto->JS
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      Begin Routine:
        ensayoClock = core.Clock()
        trial_type_actual = trial_type
      Each Frame:
        # Obtenemos tiempo actual del ensayo
        t = ensayoClock.getTime()

        # --- GO ---
        if trial_type == 'go':
            if respuesta.keys and len(respuesta.keys) > 0:
                continueRoutine = False
            elif t >= 1.5:
                continueRoutine = False  # omisión

        # --- STOP ---
        elif trial_type == 'stop':
            if respuesta.keys and len(respuesta.keys) > 0:
                flecha.setAutoDraw(False)  # desaparece la flecha
            if t >= 1.5:
                continueRoutine = False  # se termine sí o sí a los 1.5 s
      End Routine:
        if trial_type_actual == 'stop':
            if respuesta.keys:
                SSD_dynamic = max(0.05, SSD_dynamic - 0.05)
            else:
                SSD_dynamic = min(0.9, SSD_dynamic + 0.05)

        thisExp.addData('SSD', SSD)
        # Default
        validez = 'sin clasificar'
        validez_binaria = 0

        if trial_type == 'go':
            if respuesta.keys:
                if respuesta.rt < 0.1:
                    validez = 'anticipada'
                    validez_binaria = 0
                elif respuesta.corr:
                    validez = 'correcta'
                    validez_binaria = 1
                else:
                    validez = 'incorrecta'
                    validez_binaria = 0
            else:
                validez = 'omitida'
                validez_binaria = 0

        elif trial_type == 'stop':
            if respuesta.keys:
                validez = 'incorrecta'
                validez_binaria = 0
            else:
                validez = 'correcta'
                validez_binaria = 1
        practica.addData('validez', validez)
        practica.addData('validez_binaria', validez_binaria)
    CodeComponent contado_fb_practica
      Code Type = Auto->JS
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      End Routine:
        # -----------------------------------------------
        # Acumuladores para feedback entre bloques
        # Inicialización previa en "Begin Experiment"
        if 'n_trials_practica' not in vars():
            n_trials_practica = 0
            n_omisiones_practica = 0
            n_errores_practica = 0
            rt_list_practica = []

        n_trials_practica += 1

        if trial_type == 'go':
            if not respuesta.keys:
                n_omisiones_practica += 1
            elif not respuesta.corr:
                n_errores_practica += 1
            elif respuesta.rt is not None and respuesta.rt >= 0.1:
                rt_list_practica.append(respuesta.rt)
        # -----------------------------------------------
  Routine feedback_practica
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    CodeComponent feedback_text_practica
      Code Type = Auto->JS
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      Begin Routine:
        # Cálculo de métricas para feedback
        from numpy import mean

        omiss_pct = (n_omisiones_practica / n_trials_practica) * 100
        error_pct = (n_errores_practica / n_trials_practica) * 100
        mean_rt_ms = mean(rt_list_practica)*1000 if rt_list_practica else 0

        mensajes = ["Ahora veiene el segundo bloque de la misma tarea"]

        if omiss_pct > 10:
            mensajes.append(f"Omitiste un {omiss_pct:.1f}%.  Responde a todas las flechas.")
        if error_pct > 25:
            mensajes.append(f"Tienes un {error_pct:.1f}% de errores. Presta más atención")
        if mean_rt_ms > 600:
            mensajes.append(f"Responde lo más rápido que puedas")

        if mensajes:
            fbMsgpractica = "\n".join(mensajes)
        else:
            fbMsgpractica = "Buen trabajo. Puedes continuar."
    TextComponent feedback_text_text_practica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $fbMsgpractica
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Flow
  Routine instrucciones
  LoopInitiator solo_go loopType="TrialHandler"
    conditionsFile = conditions/practica_go.csv
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'right'), ('angle', 90), ('correct_key', 'right'), ('trial_type', 'go')]),
      OrderedDict([('direction', 'left'), ('angle', -90), ('correct_key', 'left'), ('trial_type', 'go')])]
    Routine ITI_routine
    Routine cruz
    Routine practica_go
  LoopTerminator solo_go
  Routine pantalla_paso
  LoopInitiator practica loopType="TrialHandler"
    conditionsFile = conditions/block1_test_sequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)])]
    Routine ITI_routine
    Routine cruz
    Routine Bloque_practica
  LoopTerminator practica
  Routine feedback_practica
  LoopInitiator A loopType="TrialHandler"
    conditionsFile = conditions/block1_test_sequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)])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
    Routine ITI_routine
    Routine cruz
    Routine bloque_A
  LoopTerminator A
  Routine feedback
  LoopInitiator B loopType="TrialHandler"
    conditionsFile = conditions/block1_test_sequence.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)])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
    Routine ITI_routine
    Routine cruz
    Routine bloque_A
  LoopTerminator B
